PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = EmotRegPavlovia
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Routines
  Routine intro
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        In this part of the study you will be given a regulation strategy to use while viewing various pictures.

        Then you will use a rating scale to indicate how you feel in the present moment. Use the number keys 1-5 to make a rating, then press ENTER to record the response. You will have 5 seconds to make a response once you see the rating scale.

        You will first be completing a few practice rounds.

        When you are ready, press SPACE to start!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue
    TextComponent cue
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 3
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        subID = int(expInfo['participant'])

        if subID%2==0:
            cue.setText(CueType1)
        if subID%2==1:
            cue.setText(CueType2)
  Routine BeginInstr
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now begin the full task.

        Press SPACE to start!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent Iti
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine ratings
    TextComponent ratingQ
      letterHeight = 0.06
      pos = (0, 0.19)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
      text [set every repeat] = How would you characterize your feelings at the present moment?
      wrapWidth = 1.3
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    TextComponent text_2
      letterHeight = 0.039
      pos = (-0.33, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $LeftText
      wrapWidth = 1.6
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    TextComponent text_4
      letterHeight = 0.039
      pos = (0.33, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $RightText
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 5
      labels = 1,2,3,4,5
      low = 1
      pos = 0, -0.38
      size = 1.35
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 5
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  Routine Pic
    ImageComponent Image
      image [set every repeat] = $Picture
      size [set every repeat] = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine TY
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Thank you for participating!

        You have completed this part of the study
Flow
  Routine intro
  Routine isi
  LoopInitiator practiceLoop loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType1', 'REGULATE'), ('rows', '003:0021'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0021:0039'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0039:0057'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0057:75'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0075:93'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0093:00108'), ('CueType2', 'REGULATE')])]
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = EmotionReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('Picture', 'musician.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'angry1.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Negative'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'biking.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'baby.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'school5.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'siblings.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'excited4.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'wedding.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'children.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'dessert.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator trials
  LoopTerminator practiceLoop
  Routine BeginInstr
  Routine isi
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = EmotionRegCues.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('CueType1', 'REGULATE'), ('rows', '003:0021'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0021:0039'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0039:0057'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0057:75'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REGULATE'), ('rows', '0075:93'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType1', 'REACT'), ('rows', '0093:00108'), ('CueType2', 'REGULATE')])]
    Routine Cue
    LoopInitiator mainTrials loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = EmotionReg.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Picture', 'musician.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'angry1.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Negative'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'biking.jpg'), ('LeftText', 'Negative'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Neutral')]),
        OrderedDict([('Picture', 'baby.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Neutral'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'school5.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'siblings.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'excited4.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'wedding.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'children.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')]),
        OrderedDict([('Picture', 'dessert.jpg'), ('LeftText', 'Neutral'), ('NeutralText', 'Neutral'), ('EmoType', 'Positive'), ('RightText', 'Positive')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator mainTrials
  LoopTerminator trials_2
  Routine TY
