PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = FoodRegPavlovia
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Routines
  Routine intro
    TextComponent Instructions
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      wrapWidth = 1.45
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      text:
        In this part of the study you will be given a regulation strategy to use while viewing pictures of food.

        Then you will use a rating scale to indicate how much you are craving the food item. Please use the mouse to select a rating, then press ENTER to submit your answer.

        You will first be completing a few practice rounds.

        When you are ready, press SPACE to start!
    KeyboardComponent space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Cue
    TextComponent cue
      letterHeight = 0.12
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $CueType
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    TextComponent ISI
      letterHeight = 0.1
      startVal [time (s)] = 5
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine BeginInstr
    TextComponent text
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        You will now begin the full task.

        Press SPACE to start!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = +
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  Routine ratings
    TextComponent ratingQ
      letterHeight = 0.07
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
      text [set every repeat] = How much are you craving this food?
      wrapWidth = 1.3
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    RatingScaleComponent rating
      categoryChoices = 1,2,3,4,5,6,7
      forceEndRoutine = False
      high = 7
      low = 1
      pos = 0, -0.35
      size = 1.4
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 5
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    TextComponent text_3
      letterHeight = 0.04
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = Not at all                                                Very Much
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  Routine Pic
    ImageComponent Image
      image [set every repeat] = $Picture
      size [set every repeat] = (1.5, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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  Routine ThankYou
    TextComponent ty
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Thank you for participating!

        You have completed this part of the study
Flow
  Routine intro
  LoopInitiator practiceLoop loopType="TrialHandler"
    Selected rows = 1
    conditionsFile = foodRows.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CueType', 'REAPPRAISE'), ('rows', '004:009')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '009:0014')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0014:0019')]),
      OrderedDict([('CueType', 'REAPPRAISE'), ('rows', '0019:0024')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0024:0029')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0029:0034')]),
      OrderedDict([('CueType', 'REAPPRAISE'), ('rows', '0034:0039')]),
      OrderedDict([('CueType', 'REAPPRAISE'), ('rows', '0039:0044')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0044:0049')])]
    Routine Cue
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = 0:3
      conditionsFile = FoodReg.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Picture', 'FoodPics\\F4H\\bagels.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\banana.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\breadtwists.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\brownies.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cakes.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cheese.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\brownies2.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cheesepuffs.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chickenkebab.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chocballs.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chickennuggs.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chips.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chips2.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chips3.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chocolate1.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\empanadas.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chocolate2.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\chocolates.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cookies.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\croissant.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\donutes.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cracker.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\donuts.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\cake.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\donuts2.jpg')]),
        OrderedDict([('Picture', 'FoodPics\\F4H\\doritos.jpg')])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
      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator trials
  LoopTerminator practiceLoop
  Routine BeginInstr
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = foodRows.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('CueType', 'REGULATE'), ('rows', '004:0014'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0014:0024'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0024:0034'), ('CueType2', 'REGULATE')]),
      OrderedDict([('CueType', 'REGULATE'), ('rows', '0034:0044'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType', 'REGULATE'), ('rows', '0044:0054'), ('CueType2', 'REACT')]),
      OrderedDict([('CueType', 'REACT'), ('rows', '0054:0064'), ('CueType2', 'REGULATE')])]
    Routine Cue
    LoopInitiator mainTrials loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = FoodReg.csv
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine Pic
      Routine ratings
      Routine isi
    LoopTerminator mainTrials
  LoopTerminator trials_2
  Routine ThankYou
